CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CH2.tif")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH3.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Overlay")
    Name to assign these images:OrigOverlay
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:MacroCells
    Typical diameter of objects, in pixel units (Min,Max):20,10000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:MacroCells
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:OrigBlue
    Select objects to measure:MacroCells

TrackObjects:[module_num:8|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
    Choose a tracking method:Overlap
    Select the objects to track:MacroCells
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    Maximum pixel distance to consider matches:30
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:3
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|Desktop\\\\\\\\Research\\\\\\\\FARSIGHT TESTS\\\\\\\\OUTPUT\\\\\\\\Version 3
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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