CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CH2.tif")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH3.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Overlay")
    Name to assign these images:OrigOverlay
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:OrigBlue
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:6|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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enabled:False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
    Select the input image:OrigRed
    Name the primary objects to be identified:CytoFoci
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
EnhanceEdges:[module_num:7|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enabled:False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
    Select the input image:OrigBlue
    Name the output image:EdgedImage
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    Select an edge-finding method:Prewitt
    Select edge direction to enhance:All
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
EnhanceOrSuppressFeatures:[module_num:8|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enabled:False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
    Select the input image:OrigBlue
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:3
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:MacroCells
    Typical diameter of objects, in pixel units (Min,Max):36,77
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:MacroCells
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:RescaleIntensity
    Select objects to measure:MacroCells

FilterObjects:[module_num:12|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
    Select the objects to filter:MacroCells
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_MaxFeretDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_RescaleIntensity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.42

TrackObjects:[module_num:13|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
    Choose a tracking method:Overlap
    Select the objects to track:FilterObjects
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    Maximum pixel distance to consider matches:30
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:3
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:FilterObjects
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

RelateObjects:[module_num:15|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notes:['The ph3 probe and dna stain overlap with each other, so this co-localization can be used to classify cells. This is relatioship is ennumerated by the RelateObjects module and the labels from one set of objects is mapped into another set of objects.']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enabled:False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
    Parent objects:MacroCells
    Child objects:CytoFoci
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:FilterObjects
    Measurement to display:TrackObjects_Label_30
    Select the image on which to display the measurements:OrigBlue
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage_DDOI
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:17|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notes:['The intensity measurements can be exported into a spreadsheet, but sometimes a useful way to process the measurements is to see them overlayed on top of the objects of interest, in this the nuclei.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DisplayImage_DDOI
    Name the output image:OverlayOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:blue
    Select objects to display:FilterObjects

OverlayObjects:[module_num:18|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
    Input:OrigBlue
    Name the output image:OverlayObjects
    Objects:FilterObjects
    Opacity:0.1

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tracked
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:OverlayOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\\\\\\\Research\\\\\\\\FARSIGHT TESTS\\\\\\\\OUTPUT\\\\\\\\Version 3
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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